PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'language': '["English", "Spanish", "German", "French"]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = 1.0000, 1.0000, 1.0000
  expName = Language_localiser_demo
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine load_language
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    CodeComponent update_language_code
      Code Type = Auto->JS
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      Begin Experiment:
        # we define "lang_code" which is our variable to
        # be used for the language localisation dynamically
        # we set it to English as default language
        lang_code = "EN"
        thisExp.addData("language_code", lang_code)
      Begin Routine:
        # we put this code at the beginning of the routine.
        # at this point the language has already been selected
        # in the dialogue box by the participant

        # now we update the language code based on the
        # language localiser variable ISO_code
        if language == expInfo['language']:
            lang_code = ISO_code

        thisExp.addData("language_code", lang_code)  # add it to output

        # this way now lang_code has the value of ISO_code
        # where language in our Excel sheet matches with the
        # language selected by the participant
  Routine update_messages
    RoutineSettingsComponent update_messages
      saveStartStop = False
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    CodeComponent update_messages_code
      Code Type = Both
      Begin JS Routine:
        // change code that does not auto-translate correctly
        // we use window instead of globals()
        // to create the global variables
        // the rest is the same
        msg_name = message;
        msg_value = eval(lang_code);
        window[msg_name] = msg_value; // here is the change
        psychoJS.experiment.addData("msg_name", msg_name);
        psychoJS.experiment.addData("msg_value", msg_value);
      Begin Routine:
        ## THIS CODE DOES NOT AUTO-TRANSLATE!!!!

        # now that we have selected our new language (lang_code)
        # we can use a loop to iterate over the messages
        # every iteration, we're gonna update the value of our
        # global variables with the value corresponding to the
        # lang_code (ISO_code from the language localiser)
        # this way we don't need to manually specify the text

        # this iteration, select the message
        msg_name = message  # e.g. variable "welcome_msg"
        # for this iteration, assign the value based on code
        msg_value = eval(lang_code) # e.g. "Bienvenido" if lang_code = "ES"
        # update message based on code
        globals()[msg_name] = msg_value  # e.g. should update the value of welcome_msg by "Bienvenido"
        # finally we add the values to output just to check
        thisExp.addData("msg_name", msg_name)
        thisExp.addData("msg_value", msg_value)
  Routine instructions
    RoutineSettingsComponent instructions
      saveStartStop = False
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    CodeComponent inst_code
      Code Type = Auto->JS
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      Begin Experiment:
        instr_msg = ""
      Begin Routine:
        # get column from excel sheet based on language code
        try:
            instr_msg = eval(f"instr_msg_{lang_code}")
        # default to english if this fails
        except NameError:
            instr_msg = instr_msg_EN
    TextComponent inst_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.0275
      pos [set every repeat] = (0, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_msg
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    TextComponent inst_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $adv_msg
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    KeyboardComponent inst_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    TextComponent welcome_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $welcome_msg
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    TextComponent welcome_adv_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.045
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $adv_msg
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    KeyboardComponent welcome_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine bye
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    TextComponent bye_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $bye_msg
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    KeyboardComponent by_adv_key
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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Flow
  LoopInitiator load_languages_loop loopType="TrialHandler"
    conditionsFile = language_localiser.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'language': 'English', 'ISO_code': 'EN'},
      {'language': 'Spanish', 'ISO_code': 'ES'},
      {'language': 'German', 'ISO_code': 'DE'},
      {'language': 'French', 'ISO_code': 'FR'}]
    Routine load_language
  LoopTerminator load_languages_loop
  LoopInitiator update_messages_loop loopType="TrialHandler"
    conditionsFile = messages.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'message': 'welcome_msg', 'EN': 'Welcome to the experiment!', 'ES': 'Bienvenido/a al experimento!', 'DE': 'Willkommen zum Experiment!', 'FR': "Bienvenue dans l'expérience !"},
      {'message': 'adv_msg', 'EN': 'Press SPACE to continue', 'ES': 'Presiona ESPACIO para continuar', 'DE': 'Drücken Sie die Leertaste, um fortzufahren', 'FR': 'Appuyez sur ESPACE pour continuer'},
      {'message': 'bye_msg', 'EN': 'You have finished the experiment\n\nPress SPACE to finish', 'ES': 'Has terminado el experimento\n\nPresiona ESPACIO para terminar', 'DE': 'Sie haben das Experiment beendet\n\nDrücken Sie die Leertaste zum Beenden', 'FR': "Vous avez terminé l'expérience\n\nAppuyez sur ESPACE pour terminer"}]
    Routine update_messages
  LoopTerminator update_messages_loop
  Routine welcome
  LoopInitiator instructions_loop loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'instr_pics': 'images/placeholder.png', 'instr_msg_EN': 'Placeholder text 1', 'instr_msg_ES': 'Texto de referencia 1', 'instr_msg_DE': 'Platzhaltertext 1', 'instr_msg_FR': 'Texte de remplacement 1'},
      {'instr_pics': 'images/placeholder.png', 'instr_msg_EN': 'Placeholder text 2', 'instr_msg_ES': 'Texto de referencia 2', 'instr_msg_DE': 'Platzhaltertext 2', 'instr_msg_FR': 'Texte de remplacement 2'},
      {'instr_pics': 'images/placeholder.png', 'instr_msg_EN': 'Placeholder text 3', 'instr_msg_ES': 'Texto de referencia 3', 'instr_msg_DE': 'Platzhaltertext 3', 'instr_msg_FR': 'Texte de remplacement 3'}]
    Routine instructions
  LoopTerminator instructions_loop
  Routine bye
